# Scorers
d:Sc/PrescribedDose = 2 Gy
sv:Sc/CellLines     = 1 "CellGeneric_abR2"
i:Sim/ZBinsFine     = 200

# s:Sim/DoseScorerOutputType                                = "bin"
# sv:Sim/DoseScorerReport                                   = 1 "Sum"
s:Sc/Patient/Tally_DoseToMedium/Quantity                    = "DoseToMedium"
d:Sc/Patient/Tally_DoseToMedium/PrescribedDose              = Sc/PrescribedDose Gy
s:Sc/Patient/Tally_DoseToMedium/OutputType                  = Sim/DoseScorerOutputType # "csv" "binary" "Root" "Xml" or "DICOM"
s:Sc/Patient/Tally_DoseToMedium/Component                   = "Patient"
sv:Sc/Patient/Tally_DoseToMedium/Report                     = Sim/DoseScorerReport
s:Sc/Patient/Tally_DoseToMedium/IfOutputFileAlreadyExists   = "Overwrite" # "Exit" "Overwrite" or "Increment"
b:Sc/Patient/Tally_DoseToMedium/OutputToConsole             = "False"
s:Sc/Patient/Tally_DoseToMedium/OutputFile                  = Sim/ScoreLabel + "_physicalDose"

s:Sc/Patient/alphaTabulated/Quantity                   = "RBE_TabulatedAlphaBeta"
s:Sc/Patient/alphaTabulated/Component                  = "Patient"
s:Sc/Patient/alphaTabulated/OutputQuantity             = "alpha"
i:Sc/Patient/alphaTabulated/ZBins                      = Sim/ZBinsFine
d:Sc/Patient/alphaTabulated/PrescribedDose             = Sc/PrescribedDose Gy
sv:Sc/Patient/alphaTabulated/CellLines                 = Sc/CellLines
s:Sc/Patient/alphaTabulated/OutputType                 = Sim/DoseScorerOutputType
s:Sc/Patient/alphaTabulated/OutputFile                 = Sim/ScoreLabel + "_alphaDose"
s:Sc/Patient/alphaTabulated/IfOutputFileAlreadyExists  = "Overwrite"
s:Sc/Patient/alphaTabulated/ReferencedSubScorer_Dose   = "Tally_DoseToMedium"
s:Sc/Patient/alphaTabulated/ModelName                  = "HCP"

s:Sc/Patient/betaTabulated/Quantity                   = "RBE_TabulatedAlphaBeta"
s:Sc/Patient/betaTabulated/Component                  = "Patient"
s:Sc/Patient/betaTabulated/OutputQuantity             = "beta"
i:Sc/Patient/betaTabulated/ZBins                      = Sim/ZBinsFine
d:Sc/Patient/betaTabulated/PrescribedDose             = Sc/PrescribedDose Gy
sv:Sc/Patient/betaTabulated/CellLines                 = Sc/CellLines
s:Sc/Patient/betaTabulated/OutputType                 = Sim/DoseScorerOutputType
s:Sc/Patient/betaTabulated/OutputFile                 = Sim/ScoreLabel + "_betaDose"
s:Sc/Patient/betaTabulated/IfOutputFileAlreadyExists  = "Overwrite"
s:Sc/Patient/betaTabulated/ReferencedSubScorer_Dose   = "Tally_DoseToMedium"
s:Sc/Patient/betaTabulated/ModelName                  = "HCP"

s:Sc/Patient/RBE/Quantity                   = "RBE_TabulatedAlphaBeta"
s:Sc/Patient/RBE/Component                  = "Patient"
s:Sc/Patient/RBE/OutputQuantity             = "rbe"
i:Sc/Patient/RBE/ZBins                      = Sim/ZBinsFine
d:Sc/Patient/RBE/PrescribedDose             = Sc/PrescribedDose Gy
sv:Sc/Patient/RBE/CellLines                 = Sc/CellLines
s:Sc/Patient/RBE/OutputType                 = Sim/DoseScorerOutputType
s:Sc/Patient/RBE/OutputFile                 = Sim/ScoreLabel + "_RBE"
s:Sc/Patient/RBE/IfOutputFileAlreadyExists  = "Overwrite"
s:Sc/Patient/RBE/ReferencedSubScorer_Dose   = "Tally_DoseToMedium"
s:Sc/Patient/RBE/ModelName                  = "HCP"

### HCP Tabulated ###
d:Sc/Patient/CellGeneric_abR2/Alphax            = 0.10 /Gy
d:Sc/Patient/CellGeneric_abR2/Betax             = 0.05 /Gy2
#d:Sc/Patient/CellGeneric_abR2/AlphaBetaRatiox  = 2 Gy

sv:Sc/Patient/CellGeneric_abR2/HCP/ParticleName             = 8 "Proton" "Helium" "Lithium" "Beryllium" "Boron" "Carbon" "Nitrogen" "Oxygen"
iv:Sc/Patient/CellGeneric_abR2/HCP/ParticleZ                = 8 1 2 3 4 5 6 7 8
dv:Sc/Patient/CellGeneric_abR2/HCP/KineticEnergyPerNucleon  = 351 0.001000 0.001047 0.001096 0.001148 0.001202 0.001259 0.001318 0.001380 0.001445 0.001514 0.001585 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10000.000000 MeV

dv:Sc/Patient/CellGeneric_abR2/HCP/Proton/Alpha     = 351 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 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0.100429 /Gy
dv:Sc/Patient/CellGeneric_abR2/HCP/Helium/Alpha     = 351 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 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0.101733 /Gy
dv:Sc/Patient/CellGeneric_abR2/HCP/Lithium/Alpha    = 351 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 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0.103930 /Gy
dv:Sc/Patient/CellGeneric_abR2/HCP/Beryllium/Alpha  = 351 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 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0.106927 /Gy
dv:Sc/Patient/CellGeneric_abR2/HCP/Boron/Alpha      = 351 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 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0.110952 /Gy
dv:Sc/Patient/CellGeneric_abR2/HCP/Carbon/Alpha     = 351 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 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0.115774 /Gy
dv:Sc/Patient/CellGeneric_abR2/HCP/Nitrogen/Alpha   = 351 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 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0.121593 /Gy
dv:Sc/Patient/CellGeneric_abR2/HCP/Oxygen/Alpha     = 351 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 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0.128756 /Gy

dv:Sc/Patient/CellGeneric_abR2/HCP/Proton/Beta      = 351 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 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0.049999  /Gy2
dv:Sc/Patient/CellGeneric_abR2/HCP/Helium/Beta      = 351 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 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0.050001  /Gy2
dv:Sc/Patient/CellGeneric_abR2/HCP/Lithium/Beta     = 351 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 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0.049996 /Gy2
dv:Sc/Patient/CellGeneric_abR2/HCP/Beryllium/Beta   = 351 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 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0.050016 /Gy2
dv:Sc/Patient/CellGeneric_abR2/HCP/Boron/Beta       = 351 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 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0.049992  /Gy2
dv:Sc/Patient/CellGeneric_abR2/HCP/Carbon/Beta      = 351 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 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0.049984 /Gy2
dv:Sc/Patient/CellGeneric_abR2/HCP/Nitrogen/Beta    = 351 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 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0.049955 /Gy2
dv:Sc/Patient/CellGeneric_abR2/HCP/Oxygen/Beta      = 351 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 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0.050042 /Gy2

#-- shared sub-scorers
s:Sc/Patient/PhysDose/Quantity                          = "DoseToWater"
s:Sc/Patient/PhysDose/Component                         = "Patient"
b:Sc/Patient/PhysDose/PreCalculateStoppingPowerRatios   = "True"
s:Sc/Patient/PhysDose/IfOutputFileAlreadyExists         = "Overwrite"
s:Sc/Patient/PhysDose/OutputType                        = Sim/DoseScorerOutputType
s:Sc/Patient/PhysDose/OutputFile                        = Sim/ScoreLabel + "_physicalDoseRBE"
i:Sc/Patient/PhysDose/ZBins                             = Sim/ZBinsFine
