s:Ge/BeamSpot/Parent 	= "Nozzle"
s:Ge/BeamSpot/Type 		= "Group"
d:Ge/BeamSpot/TransX 	= Tf/Beam/PosX/Value mm
d:Ge/BeamSpot/TransY 	= Tf/Beam/PosY/Value mm

s:So/PencilBeam/BeamParticle 		= Sim/ParticleName
i:So/PencilBeam/NumberOfHistoriesInRun	= Tf/Beam/Current/Value
u:So/PencilBeam/BeamEnergySpread 		= Tf/Beam/EnergySpread/Value
d:So/PencilBeam/BeamEnergy 			= Tf/Beam/Energy/Value MeV
d:So/PencilBeam/SigmaX 				= Tf/Beam/SigmaX/Value mm
u:So/PencilBeam/SigmaXprime 			= Tf/Beam/SigmaXprime/Value
u:So/PencilBeam/CorrelationX 		= Tf/Beam/CorrelationX/Value
d:So/PencilBeam/SigmaY 				= Tf/Beam/SigmaY/Value mm
u:So/PencilBeam/SigmaYprime 			= Tf/Beam/SigmaYprime/Value
u:So/PencilBeam/CorrelationY 		= Tf/Beam/CorrelationY/Value

s:So/PencilBeam/Type 		= "Emittance" # Beam, Isotropic, Emittance or PhaseSpace
s:So/PencilBeam/Distribution	= "BiGaussian" #
s:So/PencilBeam/Component 	= "BeamSpot"