s:Ge/BeamSpot/Parent 	= "Nozzle"
s:Ge/BeamSpot/Type 		= "Group"
d:Ge/BeamSpot/TransX 	= Tf/Beam/PosX/Value mm
d:Ge/BeamSpot/TransY 	= Tf/Beam/PosY/Value mm

s:So/PencilBeam/BeamParticle 			    = Sim/ParticleName
i:So/PencilBeam/NumberOfHistoriesInRun 	    = Tf/Beam/Current/Value
u:So/PencilBeam/BeamEnergySpread 			= Tf/Beam/EnergySpread/Value
d:So/PencilBeam/BeamEnergy 				    = Tf/Beam/Energy/Value MeV
s:So/PencilBeam/BeamPositionCutoffShape 	= "Rectangle" # Rectangle or Ellipse (if Flat or Gaussian)
s:So/PencilBeam/Type 					    = "Beam" # Beam, Isotropic, Emittance or PhaseSpace
s:So/PencilBeam/BeamPositionDistribution 	= "Flat" #
s:So/PencilBeam/Component 				    = "BeamSpot"
s:So/PencilBeam/BeamAngularDistribution 	= "None" # None, Flat or Gaussian

