# Hand-defined water
sv:Ma/Water/Components = 2 "Hydrogen" "Oxygen"
uv:Ma/Water/Fractions = 2 0.111894 0.888106
d:Ma/Water/Density = 1.0 g/cm3
d:Ma/Water/MeanExcitationEnergy = 78.0 eV
s:Ge/Patient/Parent="World"
i:Ma/Water/VariableDensityBins = 10000
u:Ma/Water/VariableDensityMin = 0.005000
u:Ma/Water/VariableDensityMax = 1.000100
s:Ge/Patient/Type = "TsImageCube"
b:Ge/Patient/DumpImagingValues = "True"
s:Ge/Patient/BaseMaterial = "Water"
i:Ge/Patient/MaterialIxMax = 10000
s:Ge/Patient/InputDirectory = "./"
s:Ge/Patient/InputFile = "MCexport\matRad_RSPcube.dat"
s:Ge/Patient/ImagingtoMaterialConverter = "matrad"
i:Ge/Patient/NumberOfVoxelsX = 100
i:Ge/Patient/NumberOfVoxelsY = 160
i:Ge/Patient/NumberOfVoxelsZ = 100
d:Ge/Patient/VoxelSizeX       = 1.000 mm
d:Ge/Patient/VoxelSizeY       = 1.000 mm
d:Ge/Patient/VoxelSizeZ       = 1.000 mm
s:Ge/Patient/DataType  = "SHORT"
