dv:Ge/Patient/DensityCorrection = 4096+2 0.001000 0.001000 0.001000 0.001000 0.001000 0.001000 0.001000 0.001000 0.001000 0.001000 0.001000 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1.05 g/cm3
iv:Ge/Patient/SchneiderHounsfieldUnitSections = 2 -1024 3072 3074

uv:Ge/Patient/SchneiderDensityOffset = 1 1
uv:Ge/Patient/SchneiderDensityFactor = 1 0
uv:Ge/Patient/SchneiderDensityFactorOffset = 1 1024

i:Ge/Patient/MinImagingValue = -1024
iv:Ge/Patient/SchneiderHUToMaterialSections = 4 -1024 -999 3072 3074
sv:Ge/Patient/SchneiderElements = 5 "Hydrogen" "Oxygen" "Nitrogen" "Carbon" "Phosphorus"
uv:Ge/Patient/SchneiderMaterialsWeight1 = 5 0.0 0.23479269 0.76508170 0.00012561 0.0
uv:Ge/Patient/SchneiderMaterialsWeight2 = 5 0.111894 0.888106 0.0 0.0 0.0
uv:Ge/Patient/SchneiderMaterialsWeight3 = 5 0.10404040  0.75656566  0.03131313  0.10606061  0.00202020 
dv:Ge/Patient/SchneiderMaterialMeanExcitationEnergy = 3 85.7 75.300000 78.0 eV
s:Ge/Patient/Parent="World"
s:Ge/Patient/Type = "TsImageCube"
b:Ge/Patient/DumpImagingValues = "True"
s:Ge/Patient/InputDirectory = "./"
s:Ge/Patient/InputFile = "matRad_cube.dat"
s:Ge/Patient/ImagingtoMaterialConverter = "Schneider"
i:Ge/Patient/NumberOfVoxelsX = 50
i:Ge/Patient/NumberOfVoxelsY = 350
iv:Ge/Patient/NumberOfVoxelsZ = 1 50
d:Ge/Patient/VoxelSizeX       = 1.000 mm
d:Ge/Patient/VoxelSizeY       = 1.000 mm
dv:Ge/Patient/VoxelSizeZ       = 1 1.000 mm
s:Ge/Patient/DataType  = "SHORT"
