# s:Sim/DoseScorerOutputType = "bin"
# sv:Sim/DoseScorerReport = 1 "Sum"
s:Sc/Patient/Tally_DoseToMedium/Quantity = "DoseToMedium"
s:Sc/Patient/Tally_DoseToMedium/OutputType = Sim/DoseScorerOutputType # "csv" "binary" "Root" "Xml" or "DICOM"
s:Sc/Patient/Tally_DoseToMedium/Component = "Patient"
sv:Sc/Patient/Tally_DoseToMedium/Report = Sim/DoseScorerReport
s:Sc/Patient/Tally_DoseToMedium/IfOutputFileAlreadyExists = "Overwrite" # "Exit" "Overwrite" or "Increment"
b:Sc/Patient/Tally_DoseToMedium/OutputToConsole = "False"
s:Sc/Patient/Tally_DoseToMedium/OutputFile = Sim/ScoreLabel + "_physicalDose"

