
# Scorers
d:Sc/PrescribedDose = 2 Gy
sv:Sc/CellLines     = 1 "CellGeneric_abR2"

s:Sc/alphaTabulated/Quantity                   = "RBE_TabulatedAlphaBeta"
s:Sc/alphaTabulated/Component                  = "Patient"
s:Sc/alphaTabulated/OutputQuantity             = "alpha"
d:Sc/alphaTabulated/PrescribedDose             = Sc/PrescribedDose Gy
sv:Sc/alphaTabulated/CellLines                 = Sc/CellLines
s:Sc/alphaTabulated/OutputType                 = Sim/DoseScorerOutputType
s:Sc/alphaTabulated/OutputFile                 = Sim/ScoreLabel + "_alpha"
s:Sc/alphaTabulated/IfOutputFileAlreadyExists  = "Overwrite"
s:Sc/alphaTabulated/ReferencedSubScorer_Dose   = "PhysDose"
s:Sc/alphaTabulated/ModelName                  = "HCP"

s:Sc/betaTabulated/Quantity                   = "RBE_TabulatedAlphaBeta"
s:Sc/betaTabulated/Component                  = "Patient"
s:Sc/betaTabulated/OutputQuantity             = "beta"
d:Sc/betaTabulated/PrescribedDose             = Sc/PrescribedDose Gy
sv:Sc/betaTabulated/CellLines                 = Sc/CellLines
s:Sc/betaTabulated/OutputType                 = Sim/DoseScorerOutputType
s:Sc/betaTabulated/OutputFile                 = Sim/ScoreLabel + "_beta"
s:Sc/betaTabulated/IfOutputFileAlreadyExists  = "Overwrite"
s:Sc/betaTabulated/ReferencedSubScorer_Dose   = "PhysDose"
s:Sc/betaTabulated/ModelName                  = "HCP"

s:Sc/RBE/Quantity                   = "RBE_TabulatedAlphaBeta"
s:Sc/RBE/Component                  = "Patient"
s:Sc/RBE/OutputQuantity             = "rbe"
d:Sc/RBE/PrescribedDose             = Sc/PrescribedDose Gy
sv:Sc/RBE/CellLines                 = Sc/CellLines
s:Sc/RBE/OutputType                 = Sim/DoseScorerOutputType
s:Sc/RBE/OutputFile                 = Sim/ScoreLabel + "_RBE"
s:Sc/RBE/IfOutputFileAlreadyExists  = "Overwrite"
s:Sc/RBE/ReferencedSubScorer_Dose   = "PhysDose"
s:Sc/RBE/ModelName                  = "HCP"

### HCP Tabulated ###
d:Sc/CellGeneric_abR2/Alphax = 0.10 /Gy
d:Sc/CellGeneric_abR2/Betax = 0.05 /Gy2
#d:Sc/CellGeneric_abR2/AlphaBetaRatiox = 2 Gy


sv:Sc/CellGeneric_abR2/HCP/ParticleName = 8 "Proton" "Helium" "Lithium" "Beryllium" "Boron" "Carbon" "Nitrogen" "Oxygen"
iv:Sc/CellGeneric_abR2/HCP/ParticleZ    = 8 1 2 3 4 5 6 7 8
dv:Sc/CellGeneric_abR2/HCP/KineticEnergyPerNucleon = 351 0.001000 0.001047 0.001096 0.001148 0.001202 0.001259 0.001318 0.001380 0.001445 0.001514 0.001585 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10000.000000 MeV

dv:Sc/CellGeneric_abR2/HCP/Proton/Alpha = 351 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 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0.100429 /Gy
dv:Sc/CellGeneric_abR2/HCP/Helium/Alpha = 351 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 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0.101733 /Gy
dv:Sc/CellGeneric_abR2/HCP/Lithium/Alpha = 351 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 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0.103930 /Gy
dv:Sc/CellGeneric_abR2/HCP/Beryllium/Alpha = 351 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 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0.106927 /Gy
dv:Sc/CellGeneric_abR2/HCP/Boron/Alpha = 351 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 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0.110952 /Gy
dv:Sc/CellGeneric_abR2/HCP/Carbon/Alpha = 351 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 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0.115774 /Gy
dv:Sc/CellGeneric_abR2/HCP/Nitrogen/Alpha = 351 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 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0.121593 /Gy
dv:Sc/CellGeneric_abR2/HCP/Oxygen/Alpha = 351 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 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0.128756 /Gy

dv:Sc/CellGeneric_abR2/HCP/Proton/Beta = 351 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 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0.049999  /Gy2
dv:Sc/CellGeneric_abR2/HCP/Helium/Beta = 351 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 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0.050001  /Gy2
dv:Sc/CellGeneric_abR2/HCP/Lithium/Beta = 351 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 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0.049996 /Gy2
dv:Sc/CellGeneric_abR2/HCP/Beryllium/Beta = 351 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 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0.050016 /Gy2
dv:Sc/CellGeneric_abR2/HCP/Boron/Beta = 351 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 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0.049992  /Gy2
dv:Sc/CellGeneric_abR2/HCP/Carbon/Beta = 351 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 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0.049984 /Gy2
dv:Sc/CellGeneric_abR2/HCP/Nitrogen/Beta = 351 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 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0.049955 /Gy2
dv:Sc/CellGeneric_abR2/HCP/Oxygen/Beta = 351 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 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0.050042 /Gy2

#-- shared sub-scorers
s:Sc/PhysDose/Quantity   = "DoseToMedium"
s:Sc/PhysDose/Component  = "Patient"
b:Sc/PhysDose/PreCalculateStoppingPowerRatios = "True"
s:Sc/PhysDose/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/PhysDose/OutputType = Sim/DoseScorerOutputType
s:Sc/PhysDose/OutputFile = Sim/ScoreLabel + "_physicalDose"

















