
# libamtrack RBE scorer
sv:Sc/CellLines     = 1 "CellGeneric_abR2"

s:Sc/tabulatedAlpha/Quantity                   = "RBE_TabulatedAlphaBeta"
s:Sc/tabulatedAlpha/Component                  = "Patient"
s:Sc/tabulatedAlpha/OutputQuantity             = "alpha"
d:Sc/tabulatedAlpha/PrescribedDose             = Sc/PrescribedDose Gy
sv:Sc/tabulatedAlpha/CellLines                 = Sc/CellLines
s:Sc/tabulatedAlpha/OutputType                 = Sim/DoseScorerOutputType
s:Sc/tabulatedAlpha/OutputFile                 = Sim/ScoreLabel + "_alpha"
s:Sc/tabulatedAlpha/IfOutputFileAlreadyExists  = "Overwrite"
s:Sc/tabulatedAlpha/ModelName                  = "HCP"

s:Sc/tabulatedBeta/Quantity                   = "RBE_TabulatedAlphaBeta"
s:Sc/tabulatedBeta/Component                  = "Patient"
s:Sc/tabulatedBeta/OutputQuantity             = "beta"
d:Sc/tabulatedBeta/PrescribedDose             = Sc/PrescribedDose Gy
sv:Sc/tabulatedBeta/CellLines                 = Sc/CellLines
s:Sc/tabulatedBeta/OutputType                 = Sim/DoseScorerOutputType
s:Sc/tabulatedBeta/OutputFile                 = Sim/ScoreLabel + "_beta"
s:Sc/tabulatedBeta/IfOutputFileAlreadyExists  = "Overwrite"
s:Sc/tabulatedBeta/ModelName                  = "HCP"

#s:Sc/RBE/Quantity                   = "RBE_TabulatedAlphaBeta"
#s:Sc/RBE/Component                  = "Patient"
#s:Sc/RBE/OutputQuantity             = "rbe"
#d:Sc/RBE/PrescribedDose             = Sc/PrescribedDose Gy
#sv:Sc/RBE/CellLines                 = Sc/CellLines
#s:Sc/RBE/OutputType                 = Sim/DoseScorerOutputType
#s:Sc/RBE/OutputFile                 = Sim/ScoreLabel + "_RBE"
#s:Sc/RBE/IfOutputFileAlreadyExists  = "Overwrite"
#s:Sc/RBE/ModelName                  = "HCP"

### HCP Tabulated ###
d:Sc/CellGeneric_abR2/Alphax 		= Sc/AlphaX /Gy
d:Sc/CellGeneric_abR2/Betax 		= Sc/BetaX /Gy2
#d:Sc/CellGeneric_abR2/AlphaBetaRatiox 	= Sc/AlphaBetaX Gy

sv:Sc/CellGeneric_abR2/HCP/ParticleName 		= 8 "Proton" "Helium" "Lithium" "Beryllium" "Boron" "Carbon" "Nitrogen" "Oxygen"
iv:Sc/CellGeneric_abR2/HCP/ParticleZ    		= 8 1 2 3 4 5 6 7 8
dv:Sc/CellGeneric_abR2/HCP/KineticEnergyPerNucleon 	= 351 0.001000 0.001047 0.001096 0.001148 0.001202 0.001259 0.001318 0.001380 0.001445 0.001514 0.001585 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10000.000000 MeV

dv:Sc/CellGeneric_abR2/HCP/Proton/Alpha = 351 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 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0.100429 /Gy
dv:Sc/CellGeneric_abR2/HCP/Helium/Alpha = 351 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 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0.101733 /Gy
dv:Sc/CellGeneric_abR2/HCP/Lithium/Alpha = 351 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 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0.103930 /Gy
dv:Sc/CellGeneric_abR2/HCP/Beryllium/Alpha = 351 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 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0.106927 /Gy
dv:Sc/CellGeneric_abR2/HCP/Boron/Alpha = 351 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 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0.110952 /Gy
dv:Sc/CellGeneric_abR2/HCP/Carbon/Alpha = 351 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 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0.115774 /Gy
dv:Sc/CellGeneric_abR2/HCP/Nitrogen/Alpha = 351 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 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0.121593 /Gy
dv:Sc/CellGeneric_abR2/HCP/Oxygen/Alpha = 351 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 2.100000 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0.128756 /Gy

dv:Sc/CellGeneric_abR2/HCP/Proton/Beta = 351 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 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0.049999  /Gy2
dv:Sc/CellGeneric_abR2/HCP/Helium/Beta = 351 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 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0.050001  /Gy2
dv:Sc/CellGeneric_abR2/HCP/Lithium/Beta = 351 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 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0.049996 /Gy2
dv:Sc/CellGeneric_abR2/HCP/Beryllium/Beta = 351 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 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0.050016 /Gy2
dv:Sc/CellGeneric_abR2/HCP/Boron/Beta = 351 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 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0.049992  /Gy2
dv:Sc/CellGeneric_abR2/HCP/Carbon/Beta = 351 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 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0.049984 /Gy2
dv:Sc/CellGeneric_abR2/HCP/Nitrogen/Beta = 351 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 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0.049955 /Gy2
dv:Sc/CellGeneric_abR2/HCP/Oxygen/Beta = 351 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 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0.050042 /Gy2


















