
# Scorers

# s:Sim/DoseScorerOutputType                                = "bin"
# sv:Sim/DoseScorerReport                                   = 1 "Sum"
s:Sc/Tally_DoseToMedium/Quantity                    = "DoseToWater"
d:Sc/Tally_DoseToMedium/PrescribedDose              = Sc/PrescribedDose Gy
s:Sc/Tally_DoseToMedium/OutputType                  = Sim/DoseScorerOutputType # "csv" "binary" "Root" "Xml" or "DICOM"
s:Sc/Tally_DoseToMedium/Component                   = "Patient"
sv:Sc/Tally_DoseToMedium/Report                     = Sim/DoseScorerReport
s:Sc/Tally_DoseToMedium/IfOutputFileAlreadyExists   = "Overwrite" # "Exit" "Overwrite" or "Increment"
b:Sc/Tally_DoseToMedium/OutputToConsole             = "False"
s:Sc/Tally_DoseToMedium/OutputFile                  = Sim/ScoreLabel + "_physicalDose"


#-- shared sub-scorers
s:Sc/PhysDose/Quantity   = "DoseToWater"
s:Sc/PhysDose/Component  = "patient"
b:Sc/PhysDose/PreCalculateStoppingPowerRatios = "True"
s:Sc/PhysDose/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/PhysDose/OutputType = Sim/DoseScorerOutputType
s:Sc/PhysDose/OutputFile = "PhysicalDose"

s:Sc/ProtonLET/Quantity   = "ProtonLET"
s:Sc/ProtonLET/Component  = "patient"
s:Sc/ProtonLET/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/ProtonLET/OutputType = Sim/DoseScorerOutputType
s:Sc/ProtonLET/OutputFile = "LET"


#-- these parameters should be overwritten in run.txt
d:Sc/PrescribedDose = 2 Gy
sv:Sc/CellLines     = 1 "CellLineV79"
b:Sc/SimultaneousExposure = "True"




s:Sc/McNamaraAlpha/Quantity                   = "RBE_McNamara"
s:Sc/McNamaraAlpha/Component                  = "patient"
s:Sc/McNamaraAlpha/OutputQuantity             = "alpha"
d:Sc/McNamaraAlpha/PrescribedDose             = Sc/PrescribedDose Gy
sv:Sc/McNamaraAlpha/CellLines                 = Sc/CellLines
b:Sc/McNamaraAlpha/SimultaneousExposure       = Sc/SimultaneousExposure
s:Sc/McNamaraAlpha/OutputType                 = Sim/DoseScorerOutputType
s:Sc/McNamaraAlpha/OutputFile                 = Sim/ScoreLabel + "_alpha"
s:Sc/McNamaraAlpha/IfOutputFileAlreadyExists  = "Overwrite"
s:Sc/McNamaraAlpha/ReferencedSubScorer_Dose   = "PhysDose"
s:Sc/McNamaraAlpha/ReferencedSubScorer_LET    = "ProtonLET"

s:Sc/McNamaraBeta/Quantity                   = "RBE_McNamara"
s:Sc/McNamaraBeta/Component                  = "patient"
s:Sc/McNamaraBeta/OutputQuantity             = "beta"
d:Sc/McNamaraBeta/PrescribedDose             = Sc/PrescribedDose Gy
sv:Sc/McNamaraBeta/CellLines                 = Sc/CellLines
b:Sc/McNamaraBeta/SimultaneousExposure       = Sc/SimultaneousExposure
s:Sc/McNamaraBeta/OutputType                 = Sim/DoseScorerOutputType
s:Sc/McNamaraBeta/OutputFile                 = Sim/ScoreLabel + "_beta"
s:Sc/McNamaraBeta/IfOutputFileAlreadyExists  = "Overwrite"
s:Sc/McNamaraBeta/ReferencedSubScorer_Dose   = "PhysDose"
s:Sc/McNamaraBeta/ReferencedSubScorer_LET    = "ProtonLET"




# Topas parameter settings for biological calculations for the cell line V79

### Biological Parameters ###
d:Sc/CellLineV79/Alphax = 0.0722 /Gy #0.072
d:Sc/CellLineV79/Betax = 0.0502 /Gy2 #0.050
d:Sc/CellLineV79/AlphaBetaRatiox = 1.412 Gy #1.438


### Physical Reference ####
d:Sc/CellLineV79/Dose = 4. Gy
d:Sc/CellLineV79/PrescribedDose = 2. Gy

d:Sc/CellLineV79/LETx = 0.2 MeV/mm # Co60


### Wilkens ###
d:Sc/CellLineV79/Lambda = 0.02 mm/MeV/Gy
d:Sc/CellLineV79/Alpha0Wilkens = 0.1 /Gy


### Chen ###
d:Sc/CellLineV79/Alpha0Chen = 0.1 /Gy


### RMF ###
d:Sc/CellLineV79/NucleusDiameter = 5.0 um
u:Sc/CellLineV79/GbpPerCell = 6.257

d:Sc/CellLineV79/ReferenceDSBperGyPerGbp = 8.32 /Gy  # normoxic cells
#d:Sc/CellLineV79/ReferenceDSBperGyPerGbp = 2.86 /Gy  # anoxic cells

### MKM LET ###
d:Sc/CellLineV79/DomainDiameter = 0.52 um
d:Sc/CellLineV79/Alpha0MKM = 0.1 /Gy

### DSB from MCDS, Tabulated Version ###
dv:Sc/CellLineV79/KE = 40 0.001 0.002 0.003 0.004 0.005 0.010 0.020 0.030 0.040 0.050 0.060 0.070 0.080 0.090 0.100 0.200 0.300 0.500 0.900 1.000 1.500 2.000 2.500 3.000 3.500 4.000 5.000 6.000 7.500 10.000 15.000 25.000 50.000 75.000 100.000 150.000 200.000 250.000 500.000 1000.000 MeV
dv:Sc/CellLineV79/DSBperGyPerCell = 40  174.9089626 174.4889702 174.545929 174.2573798 174.0846259 173.1081907 171.8751283 170.4818304 169.1724058 168.0119501 166.6486963 165.4838592 164.1719309 162.8737728 161.7946867 149.735712 139.259063 122.8317926 102.9275366 99.30471168 87.29956608 79.89493248 75.17987712 71.82181632 69.23488896 67.22130432 64.48728576 62.39589926 60.31377638 58.17519552 56.11122432 54.44208346 53.19600192 52.63110912 52.42755994 52.04512282 52.01094758 51.98372006 51.88626432 51.7964448 /Gy


### MKM_PIDE Tabulated ###
sv:Sc/CellLineV79/MKM_PIDE/ParticleName = 8 "Proton" "Helium" "Lithium" "Beryllium" "Boron" "Carbon" "Nitrogen" "Oxygen"
iv:Sc/CellLineV79/MKM_PIDE/ParticleZ    = 8 1 2 3 4 5 6 7 8
b:Sc/CellLineV79/MKM_PIDE/UseReferenceBeta = "True"

dv:Sc/CellLineV79/MKM_PIDE/KineticEnergyPerNucleon = 1085 0 0.16 0.17 0.18 0.19 0.2 0.21 0.22 0.23 0.24 0.25 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1000 MeV

dv:Sc/CellLineV79/MKM_PIDE/Proton/Alpha = 1085 0.646678 0.646678 0.636297 0.625985 0.615943 0.60566 0.596127 0.586414 0.577061 0.56807 0.558929 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0.109693 /Gy

dv:Sc/CellLineV79/MKM_PIDE/Helium/Alpha = 1085 0.723168 0.723168 0.723928 0.725929 0.728803 0.731608 0.735961 0.740343 0.745136 0.750291 0.755406 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0.112064 /Gy

dv:Sc/CellLineV79/MKM_PIDE/Lithium/Alpha = 1085 0.465156 0.465156 0.460656 0.457319 0.454695 0.452738 0.451648 0.451065 0.450943 0.451422 0.452304 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0.11603 /Gy

dv:Sc/CellLineV79/MKM_PIDE/Beryllium/Alpha = 1085 0.34348 0.34348 0.334993 0.327889 0.321983 0.3171 0.313497 0.310002 0.307744 0.305836 0.303954 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0.120506 /Gy

dv:Sc/CellLineV79/MKM_PIDE/Boron/Alpha = 1085 0.262134 0.262134 0.256784 0.251964 0.248287 0.244903 0.242199 0.240056 0.238188 0.236929 0.235685 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0.12777 /Gy

dv:Sc/CellLineV79/MKM_PIDE/Carbon/Alpha = 1085 0.218282 0.218282 0.212856 0.208391 0.20435 0.20118 0.198238 0.19605 0.193979 0.192545 0.191134 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0.137101 /Gy

dv:Sc/CellLineV79/MKM_PIDE/Nitrogen/Alpha = 1085 0.181466 0.181466 0.177057 0.17301 0.16967 0.166696 0.164258 0.162139 0.160251 0.158783 0.157449 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0.207232 /Gy

dv:Sc/CellLineV79/MKM_PIDE/Oxygen/Alpha = 1085 0.161685 0.161685 0.156865 0.152854 0.149315 0.146383 0.143919 0.141761 0.140043 0.138595 0.137357 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0.166902 /Gy


### MKM_PIDE Tabulated ###
sv:Sc/CellLineV79/MKM_Kase/ParticleName = 8 "Proton" "Helium" "Lithium" "Beryllium" "Boron" "Carbon" "Nitrogen" "Oxygen"
iv:Sc/CellLineV79/MKM_Kase/ParticleZ    = 8 1 2 3 4 5 6 7 8
b:Sc/CellLineV79/MKM_Kase/UseReferenceBeta = "True"

dv:Sc/CellLineV79/MKM_Kase/KineticEnergyPerNucleon = 1085 0 0.16 0.17 0.18 0.19 0.2 0.21 0.22 0.23 0.24 0.25 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1000 MeV

dv:Sc/CellLineV79/MKM_Kase/Proton/Alpha = 1085 1.10823 1.10823 1.09003 1.07187 1.05414 1.03601 1.01926 1.00221 0.985823 0.970134 0.954231 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0.185489 /Gy

dv:Sc/CellLineV79/MKM_Kase/Helium/Alpha = 1085 1.31543 1.31543 1.31669 1.32002 1.32488 1.32953 1.33663 1.34362 1.35114 1.35918 1.36706 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0.189946 /Gy

dv:Sc/CellLineV79/MKM_Kase/Lithium/Alpha = 1085 0.859218 0.859218 0.85091 0.844791 0.840084 0.836534 0.834541 0.833356 0.832937 0.833583 0.834919 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0.197397 /Gy

dv:Sc/CellLineV79/MKM_Kase/Beryllium/Alpha = 1085 0.634443 0.634443 0.618794 0.605738 0.594954 0.586007 0.57939 0.572891 0.568609 0.564951 0.561314 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0.205903 /Gy

dv:Sc/CellLineV79/MKM_Kase/Boron/Alpha = 1085 0.484242 0.484242 0.474349 0.465475 0.458754 0.452541 0.447564 0.443549 0.440002 0.437555 0.435114 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0.219538 /Gy

dv:Sc/CellLineV79/MKM_Kase/Carbon/Alpha = 1085 0.403169 0.403169 0.393148 0.384924 0.377527 0.371703 0.366289 0.362203 0.3583 0.355554 0.352833 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0.237133 /Gy

dv:Sc/CellLineV79/MKM_Kase/Nitrogen/Alpha = 1085 0.338898 0.338898 0.33085 0.323465 0.317585 0.312195 0.307782 0.303954 0.300545 0.297915 0.295511 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0.353015 /Gy

dv:Sc/CellLineV79/MKM_Kase/Oxygen/Alpha = 1085 0.298631 0.298631 0.289734 0.282349 0.275862 0.270474 0.265935 0.261922 0.25869 0.255949 0.253577 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0.292949 /Gy
